PsychoPy2experiment version="1.90.3"
Settings
  expName = experiment
  Experiment info = {'n_square': '32', 'opacity': '0.6', 'probeFrames': '5', 'participant': 'test', 'premask': '20', 'session': '1', 'image_size': '128', 'lowest_opacity': '0.2', 'postmask': '20'}
  Full-screen window = True
  Window size (pixels) = [1920, 1080]
  Screen = 1
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Units = use prefs
  Data filename = 'data/%s/%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Save csv file = True
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Routines
  Routine premask
    GratingComponent premasking
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = $premask_dur
      units = pix
      pos = [0, -0]
      size = $(image_size, image_size)
      tex [set every frame] = $np.random.rand(n_square,n_square)*2 - 1
      sf = None
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  Routine discriminate
    CodeComponent get_response
      Begin Routine:
        main_loop.addData("discrim_resptime", globalClock.getTime() - startTime)
        resp_options = [['nV_V',['Nonliving_Things','Living_Things']],
                        ['V_nV',['Living_Things','Nonliving_Things']]]
        idx = np.random.choice([0,1])
        resp_msg = '{}'.format(resp_options[idx][0])
        main_loop.addData("response_window", resp_options[idx][0])
      End Routine:
        temp_correctAns = np.where(np.array(resp_options[idx][1]) == category)[0][0]+1
        main_loop.addData('correctAns',temp_correctAns)
        # objective accuracy
        if (response.keys == str(temp_correctAns)) or (response.keys == temp_correctAns):
           temp_corr = 1
        else:
            temp_corr = 0
        main_loop.addData('response.corr' , temp_corr)
    TextComponent response_options
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $resp_msg
      letterHeight = 0.1
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    KeyboardComponent response
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      allowedKeys = '1','2'
      forceEndRoutine = False
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  Routine fixation
    TextComponent fixation_cross
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      letterHeight = 0.1
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    TextComponent blank_period
      startVal [condition] = $fixation_cross.status == FINISHED
      stopVal [duration (s)] = $blank_dur
      letterHeight = 0.1
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    CodeComponent code
      Begin Routine:
        main_loop.addData("fixation_onset", globalClock.getTime() - startTime)
        main_loop.addData("blank_dur",blank_dur)
  Routine visibility
    CodeComponent trigger_visibility
      Begin Routine:
        main_loop.addData("visible_resptime", globalClock.getTime() - startTime)
      End Routine:
        count += 1
        main_loop.addData('probe_Frames',curr)


        if (visible.keys == str('1')) or (visible.keys == '1'):# invisible
            opacity += np.random.choice([0.1, 0.2, 0.3],size = 1)[0]
            if opacity > 1: opacity = 1
            #curr += np.random.choice([1,2,3],size=1)[0]
            #if curr < 1:  curr = 1
        elif (visible.keys == str('2')) or (visible.keys == '2'):# partially aware
            opacity -= 0.1
            if opacity < lowest_opacity: opacity = lowest_opacity
            #curr -= 1
            #if curr < 1:  curr = 1
        elif (visible.keys == str('3')) or (visible.keys == '3'): # visible
            opacity -= np.random.choice([0.1, 0.2, 0.3],size = 1)[0]
            if opacity < lowest_opacity: opacity = lowest_opacity
            #curr -= np.random.choice([2,3],size=1,p=[0.5,0.5])[0]
            #if curr < 1: curr = 1
    TextComponent visibility_message
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = ?
      letterHeight = 0.1
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    KeyboardComponent visible
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      allowedKeys = '1','2','3'
      forceEndRoutine = False
      storeCorrect = True
      correctAns = '1'
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  Routine jitter1
    TextComponent jitter_delay
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter1_dur
      text = +
      letterHeight = 0.1
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    CodeComponent log_jitter_delay
      Begin Routine:
        jitter1_dur = jitter1_dur_options[jitter_counter]
        main_loop.addData('jitter1',jitter1_dur)
  Routine intro
    CodeComponent settingThingsUp
      Begin Experiment:
        globalClock = core.Clock()

        premask_dur = int(expInfo['premask'])
        postmask_dur = int(expInfo['postmask'])
        n_square = int(expInfo['n_square'])
        image_size = int(expInfo['image_size'])
        opacity = float(expInfo['opacity'])
        n_session = int(expInfo['session'])

        curr = int(expInfo['probeFrames'])
        lowest_opacity = float(expInfo['lowest_opacity'])
        count = 0

        import time
        from psychopy import parallel
        parallel.setPortAddress(888)
        wait_msg = "Wating for Scanner ..."
        msg = visual.TextStim(win,color = 'DarkGray',text = wait_msg)

        # jitter 1
        jitter_counter = 0
        jitter1_dur_options = np.concatenate([[1.5]*16,[2.0]*8,[2.5]*6,[3.0]*4,[3.5]*4])
        np.random.shuffle(jitter1_dur_options)

        # jitter 2
        jitter2_dur_options = np.concatenate([[6.0]*16,[6.5]*8,[7.0]*6,[7.5]*4,[8.0]*4])
        np.random.shuffle(jitter2_dur_options)
      Begin Routine:
        msg.draw()
        win.flip()

        while True:
            if (event.getKeys() == ['q']):#(parallel.readPin(10) == 1) or
                break
            else:
                time.sleep(0.0001) # give 1ms to other processes
        globalClock.reset()
        startTime = globalClock.getTime()
  Routine end_experiment
    CodeComponent theEnd
      End Experiment:
        print(globalClock.getTime() - startTime)
        print("mean unconscious = {:.2f}, frame = {}, p(correct) = {:.2f}".format(
            meanvis,curr,meanacc))
  Routine intoPrepare
    TextComponent preparation
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      letterHeight = 0.1
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    TextComponent first_blank
      startVal [time (s)] = 3
      stopVal [duration (s)] = 10
      letterHeight = 0.1
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  Routine jitter2
    CodeComponent code_2
      Begin Routine:
        jitter2_delay_dur = jitter2_dur_options[jitter_counter]
        main_loop.addData('jitter2',jitter2_delay_dur)
        jitter_counter += 1
      End Routine:
        meanacc = main_loop.data['response.corr'].mean()
        meanvis = main_loop.data['visible.corr'].mean()

        print('{}/{}, mean unconscious = {:.2f},frame = {},p(correct) = {:.2f}'.format(
                main_loop.thisN,main_loop.nTotal,
                meanvis,curr,meanacc))
    TextComponent post_jitter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter2_delay_dur
      text = +
      letterHeight = 0.1
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  Routine postmask
    GratingComponent postmasking
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = postmask_dur
      units = pix
      size = $(image_size, image_size)
      tex [set every frame] = $np.random.rand(n_square,n_square)*2 -1
      sf = None
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  Routine probe
    CodeComponent importing
      Code Type = Py
      Begin Experiment:
        import sys
        reload(sys)
        sys.setdefaultencoding("latin-1")
      Begin Routine:
        main_loop.addData("image_onset_time", globalClock.getTime() - startTime)
    ImageComponent presentation
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = $curr
      units = pix
      opacity [set every repeat] = $opacity
      size = $(image_size, image_size)
      image [set every repeat] = $PATH
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Flow
  Routine intro
  Routine intoPrepare
  LoopInitiator main_loop loopType="TrialHandler"
    nReps = 1
    conditionsFile = ../experiment_csvs/session_1.csv
    loopType = random
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    conditions:
      [OrderedDict([('Category', 'animal'), ('Word', 'Gaviota'), ('Mean_Valence', 5.0), ('SD_Valence', 1.9864405216230223), ('Mean_Arousal', 5.026315789473684), ('SD_Arousal', 1.9240559932469117), ('Mean_Familiarity', 4.36), ('SD_Familiarity', 2.325224003546038), ('Mean_Concreteness', 7.92), ('SD_Concreteness', 1.5524174696260014), ('Frequency', 2.5), ('Length', 7), ('English', 'Seagull'), ('log_frequency', 0.9162907318741552), ('picked', True), ('PATH', '../stimuli_figure/Seagull.jpeg'), ('blank_dur', 0.6335324363714059), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Almeja'), ('Mean_Valence', 4.921052631578949), ('SD_Valence', 1.6986732334124204), ('Mean_Arousal', 3.4210526315789487), ('SD_Arousal', 1.7496189383941527), ('Mean_Familiarity', 4.24), ('SD_Familiarity', 2.3853720883753127), ('Mean_Concreteness', 6.72), ('SD_Concreteness', 2.6223399220289245), ('Frequency', 0.54), ('Length', 6), ('English', 'Clam'), ('log_frequency', -0.6161861394238171), ('picked', True), ('PATH', '../stimuli_figure/Clam.jpeg'), ('blank_dur', 0.35022490885271323), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'animal'), ('Word', 'Oso'), ('Mean_Valence', 5.605263157894738), ('SD_Valence', 1.7939760112321024), ('Mean_Arousal', 5.2368421052631575), ('SD_Arousal', 2.07213443326696), ('Mean_Familiarity', 4.72), ('SD_Familiarity', 2.685144316419509), ('Mean_Concreteness', 7.64), ('SD_Concreteness', 1.468559384794046), ('Frequency', 11.43), ('Length', 3), ('English', 'Bear'), ('log_frequency', 2.4362414778067194), ('picked', True), ('PATH', '../stimuli_figure/Bear.jpeg'), ('blank_dur', 0.4893778749568593), ('category', 'Living_Things')]),
      OrderedDict([('Category', 'object'), ('Word', 'Misil'), ('Mean_Valence', 1.5526315789473684), ('SD_Valence', 0.7240041966823505), ('Mean_Arousal', 6.789473684210527), ('SD_Arousal', 1.9885876386486108), ('Mean_Familiarity', 3.6), ('SD_Familiarity', 2.3804761428476167), ('Mean_Concreteness', 7.8), ('SD_Concreteness', 1.3228756555322954), ('Frequency', 5.0), ('Length', 5), ('English', 'Missile'), ('log_frequency', 1.6094379124341005), ('picked', True), ('PATH', '../stimuli_figure/Missile.jpeg'), ('blank_dur', 0.4136258849875571), ('category', 'Nonliving_Things')])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
    Routine fixation
    Routine premask
    Routine probe
    Routine postmask
    Routine jitter1
    Routine discriminate
    Routine visibility
    Routine jitter2
  LoopTerminator main_loop
  Routine end_experiment
